# s:Sim/DoseScorerOutputType = "bin"
# sv:Sim/DoseScorerReport = 1 "Sum"
s:Sc/Patient/Tally_DoseToMedium/Quantity = "DoseToMedium"
s:Sc/Patient/Tally_DoseToMedium/OutputType = Sim/DoseScorerOutputType # "csv" "binary" "Root" "Xml" or "DICOM"
s:Sc/Patient/Tally_DoseToMedium/Component = "Patient"
sv:Sc/Patient/Tally_DoseToMedium/Report = Sim/DoseScorerReport
s:Sc/Patient/Tally_DoseToMedium/IfOutputFileAlreadyExists = "Overwrite" # "Exit" "Overwrite" or "Increment"
b:Sc/Patient/Tally_DoseToMedium/OutputToConsole = "False"
s:Sc/Patient/Tally_DoseToMedium/OutputFile = Sim/ScoreLabel + "_physicalDose"


s:Ge/IC/Type = "TsBox"
s:Ge/IC/Parent="Nozzle"
#b:Ge/IC/IsParallel = "True"
s:Ge/IC/Material=Ge/World/Material
d:Ge/IC/HLX = 25. cm
d:Ge/IC/HLY = 25. cm
d:Ge/IC/HLZ = 0.001 mm * Sim/HalfValue
d:Ge/IC/TransZ = Ge/IC/HLZ mm


# SCORERS
s:Sc/IC/Quantity = "SurfaceTrackCount"
s:Sc/IC/OutputType = "csv" # "csv" "binary" "Root" "Xml" or "DICOM"
s:Sc/IC/Surface = "IC/ZPlusSurface"
sv:Sc/IC/Report = 1 "Sum"
s:Sc/IC/IfOutputFileAlreadyExists = "Overwrite" # "Exit" "Overwrite" or "Increment"
s:Sc/IC/OutputFile = Sim/PlanLabel + "_IC"
s:Sc/IC/OnlyIncludeParticlesOfGeneration = "Primary"
s:Sc/IC/OnlyIncludeParticlesGoing = "In"

s:Sc/Dose/Quantity = "DumpEventMapDoseToMedium"
s:Sc/Dose/OutputType = "binary"
s:Sc/Dose/Component = "Patient"
sv:Sc/Dose/Report = 1 "Sum"
s:Sc/Dose/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Dose/OutputFile = Sim/PlanLabel + "_dose"

